PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 1024]
  expName = exp
  keyboardBackend = PsychToolbox
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent Instructions
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = In this task you will review sets of objects in triplets. Your task is to pay attention to where and when these objects appear. Press the spacebar to begin.
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    KeyboardComponent start
      allowedKeys = 'space','q'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine MethodCheck
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    CodeComponent methodc_code
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
        methodResp = None
      End Routine:
        #store whether or not they answered correctly for the "same" or "different" trial type.
        thisExp.addData("Method Clicked", MethodMouse.clicked_name)

        if MethodMouse.clicked_name == methodAns:
            EncodingTrials.addData ("methodCheck", '1')
            methodCheck = 1
        else:
            EncodingTrials.addData ("methodCheck", '0')
            methodCheck = 0

        #for psychopy
        EncodingTrials.addData("TRIAL_INDEX", str(TRIAL_INDEX))
        EncodingTrials.addData("trialCategory", str(trial_category))
        EncodingTrials.addData("encodingTrials", str(eTrials))
        EncodingTrials.addData("methodCheck", str(methodCheck))

        #for the EDF output
        el_tracker.sendMessage('!V TRIAL_VAR methodCheck %s' % methodCheck)
        el_tracker.sendMessage('!V TRIAL_VAR methodResp %s' % MethodMouse.clicked_name)

        win.mouseVisible = False
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Was this set same or different as the previous set?
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    TextComponent sameText
      letterHeight = 0.03
      pos = (-0.2, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Same
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    TextComponent diffText
      letterHeight = 0.03
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Different
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    PolygonComponent leftCL
      fillColor = $(1.0000, 1.0000, 1.0000)
      lineWidth = 3
      opacity = 0.5
      pos = (-.2, -.3)
      shape = rectangle
      size = (-0.2, -0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent rightCL
      fillColor = $(1.0000, 1.0000, 1.0000)
      lineWidth = 3
      opacity = 0.5
      pos = (0.2, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent MethodMouse
      clickable = rightCL, leftCL
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    MarkEvents MarkEventsE1_MethodCheck plugin="psychopy-eyelink"
      componentsForEyeLinkRespEventMessages = MethodMouse.clicked_name
      componentsForEyeLinkStimEventMessages = text, sameText, diffText, leftCL, rightCL
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = methodCheck
      useQuitKeys = True
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  Routine first_view
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    CodeComponent firstw_code
      Code Type = Py
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      Begin Routine:
        #position variables
        leftPos = (-0.5, 0.0)
        midPos = (0.0, 0.0)
        rightPos = (0.5, 0.0)

        #position map
        position_map = {
            'LMR': (leftPos, midPos, rightPos),
            'LRM': (leftPos, rightPos, midPos),
            'MLR': (midPos, leftPos, rightPos),
            'RML': (rightPos, midPos, leftPos),
            'RLM': (rightPos, leftPos, midPos),
            'MRL': (midPos, rightPos, leftPos),
        }
        #position names
        position_names = {
            "left": leftPos,
            "middle": midPos,
            "right": rightPos
        }
        #iterate through trial type and set a new one for each trial
        method_Trial = sameDiff[eTrials]
        if method_Trial == "same":
            trialType = sameTrials[eTrials]
        else:
            trialType = diffTrials[eTrials]

        #get positions from the position map
        firstPos, secondPos, thirdPos = position_map[trialType]

        #set images in triplets for the first view
        triplet1 = 'images/' + encodingPics1[eTrials][0] + '.png'
        triplet2 = 'images/' + encodingPics1[eTrials][1] + '.png'
        triplet3 = 'images/' + encodingPics1[eTrials][2] + '.png'

        #save first view positions and triplets
        firstPos1 = firstPos
        secondPos1 = secondPos
        thirdPos1 = thirdPos
        triplet1_1 = triplet1
        triplet2_1 = triplet2
        triplet3_1 = triplet3

        #save variables
        EncodingTrials.addData("trialOrder", trialType)
        thisExp.addData("triplet1", triplet1)
        thisExp.addData("triplet2", triplet2)
        thisExp.addData("triplet3", triplet3)
        trial_category = "encoding"
    ImageComponent Triplet1
      image [set every repeat] = $triplet1
      pos [set every repeat] = $firstPos
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent Triplet2
      image [set every repeat] = $triplet2
      pos [set every repeat] = $secondPos
      size = (0.25, 0.25)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    ImageComponent Triplet3
      image [set every repeat] = $triplet3
      pos [set every repeat] = $thirdPos
      size = (0.25, 0.25)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop
      sound [set every repeat] = POP.wav
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop2
      sound [set every repeat] = POP.wav
      speakerIndex = 8.0
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop3
      sound [set every repeat] = POP.wav
      speakerIndex = 8.0
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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    MarkEvents MarkEventsE1first_view plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = Triplet1, Triplet2, Triplet3
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 50
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = method_Trial, eTrials, firstPos, secondPos, thirdPos, trial_category, triplet1_1, triplet2_1, triplet3_1
      useQuitKeys = True
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  Routine initCode
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    CodeComponent randomizeImages
      Code Type = Py
      Begin Experiment:
        import random, csv, codecs
        from collections import defaultdict
        #set random seed
        random.seed()

        #define rest of the variables
        retProb = random.random()
        rightPos = None
        midPos = None
        leftPos = None
        firstPos = None
        secondPos = None
        thirdPos = None
        TestQuestion = None
        MouseResp = None
        trialType = None
        methodAns = None
        nextTrial = None
        methodCheck = None
        retrievalImage = None
        response = None
        corrAns = None
        decResponse = None
        encodingType = None
        trialPics = []
        trial_category = []
        eTrials = None
        retTrials = None
        encode_position = None
        sampled_trials = None
        position_counts = []
        retResp = None
      Begin Routine:
        allPics = [f"OBJ_{i}" for i in range(1, 205)];
        sameDiff = ["same"] * 20 + ["diff"] * 5 #25 trials with 20 'same', 5 'diff'
        shuffle(allPics) #shuffle image list
        shuffle(sameDiff) #shuffle trial order list
        print(sameDiff)
        #For the trial order:
        #Define the strings
        fixed_strings = ['LMR', 'RML']  #These will occur 9 times each
        other_strings = ['MLR', 'MRL', 'LRM', 'RLM']  #These will be randomly selected to have total of 9 also

        #Select strings from other_strings with repetitions
        selected_strings = random.choices(other_strings, k=9)

        #Create a list to store the strings
        sameTrials = fixed_strings * 9   #Repeating fixed_strings 9 times
        sameTrials = (fixed_strings * 9) + selected_strings
        random.shuffle(sameTrials)

        #Print the list
        print("Randomized string list:")
        print(sameTrials) #now this should be a list of 27 that we will run 20 of, but because it is indexed by eTrials, there needs to be more than 25 items.

        #for the different trials:
        diffTrials = (fixed_strings * 9) + selected_strings
        random.shuffle(diffTrials)
        print("'different' trials:")
        print(diffTrials)

        numItems = len(allPics)
        numEncodingBlock1 = 25
        numEncodingBlock2 = 25
        numTotretrieval = 4
        numRetrieval1 = 20
        numRetrieval2 = 20

        #Split allPics into triplets
        trialPics = [allPics[i:i+3] for i in range(0, numItems, 3)] #makes 70 triplets from shuggled images
        if len(trialPics[-1]) != 3:
            trialPics.pop()  #Remove the last item if it's not a full triplet
        print("Total number of triplets created:", len(trialPics))

        #Set for the two encoding blocks
        encodingPics1 = trialPics[:25]  #First 25 triplets for block 1
        encodingPics2 = trialPics[25:50]  #Next 25 triplets for block 2

        #Print the selected encoding triplets
        print("Encoding Block 1 Triplets:")
        print(encodingPics1)
        print("Encoding Block 2 Triplets:")
        print(encodingPics2)

        #Initialize for final retrieval lists:
        samePics = []
        samePics2 = []

        #set trial numbers
        eTrials = 0
        TRIAL_INDEX = 0
  Routine RetrievalImage
    RoutineSettingsComponent RetrievalImage
      stopVal [duration (s)] = 1.5
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    CodeComponent ret_img_c
      Code Type = Py
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      Begin Routine:
        retrievalImage = None
        # Ensure `samePics` has remaining images
        if len(samePics) == 0:
            sys.exit("Error: samePics is empty")
        # Select and store the current retrieval image from samePics
        retrievalImage = 'images/' + samePics[retTrials] + '.png'
        encoding_position = str(retrieval_list[retTrials]["encoding_position"])

        # Add data
        trial_category = "retrieval"
        RetrievalTrials.addData("retIMG", retrievalImage)
        thisExp.addData("retIMG", retrievalImage)
        thisExp.addData("encode_position", encoding_position)
    ImageComponent retIMG
      image [set every repeat] = $retrievalImage
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_pop7
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    MarkEvents MarkEventsR1_RetIMG plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = retIMG
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = retrievalImage, retTrials, trial_category
      useQuitKeys = True
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  Routine old_new_q
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    CodeComponent old_new_c
      Code Type = Auto->JS
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    TextComponent question
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Is this object old or new?
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    PolygonComponent oldans
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (-0.2, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent newans
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0.2, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent old_text
      letterHeight = 0.03
      pos = (-0.2, -0.3)
      startVal [time (s)] = 0.0
      text = Old
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    TextComponent new_text
      letterHeight = 0.03
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
      text = New
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    MouseComponent mouse_2
      clickable = oldans, newans
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine decision
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        print(expInfo['Condition'])
        print(expInfo)
        if expInfo['Condition'] == '1':
            TestQuestion = "Where did you see this object?"
        elif expInfo['Condition'] == '2':
            TestQuestion = "When did you see this object?"
        else:
            print("geldim")
    TextComponent decisionQ
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $TestQuestion
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  Routine TestQuestion
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    CodeComponent code_6
      Code Type = Py
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine endscreen
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  Routine EndScreen
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    TextComponent end
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = You are done with this task! Thank you for participating!
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  Routine mask
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    ImageComponent mask_left
      image = images/Mask.png
      pos = (-0.5, 0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent mask_mid
      image = images/Mask.png
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent mask_right
      image = images/Mask.png
      pos = (0.5, 0.0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    MarkEvents MarkEventsMask plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = mask_mid
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 50
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useQuitKeys = False
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  Routine Decision
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    CodeComponent dec_code
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
        el_tracker.sendMessage('decision started')

        #set timer for the mouse so that we can get the exact time of the decision
        Order_Position_Response.clickReset()
        mouse_clicked = False
      Each Frame:
        #check every frame whether mouse is clicked
        if 1 in Order_Position_Response.getPressed() and not mouse_clicked:
            decisionMade = str(el_tracker.getCurrentTime())
            mouse_clicked = True
      End Routine:
        win.mouseVisible = False

        retTrials = (retTrials + 1)
        TRIAL_INDEX = (TRIAL_INDEX + 1)

        #for EDF output
        el_tracker.sendMessage('!V TRIAL_VAR retTrials %d' % retTrials)
        el_tracker.sendMessage('!V TRIAL_VAR orderPosition %s' % Order_Position_Response.clicked_name)
        el_tracker.sendMessage('!V TRIAL_VAR decisionMade %s' % decisionMade)
        el_tracker.sendMessage('!V TRIAL_VAR encoding_order %s' % encoding_order)
        el_tracker.sendMessage('!V TRIAL_VAR encoding_location %s' % encoding_location)
        el_tracker.sendMessage('!V TRIAL_VAR origin_trial %s' % origin_trial)

        #PsychoPy output:
        RetrievalTrials.addData("TRIAL_INDEX", str(TRIAL_INDEX))
        RetrievalTrials.addData("retIMG", str(retrievalImage))
        RetrievalTrials.addData("trialCategory", str(trial_category))
        RetrievalTrials.addData("retTrials", str(retTrials))

        #sanity check
        #print("decision time:")
        #print(decisionMade)
        #print("ret list:")
        #print(retrieval_list)
        #print("samePics:")
        #print(samePics)
        #print("sampled trials:")
        #print(sampled_trials)
    TextComponent decisionQ_2
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = When did you see this object?
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    PolygonComponent first
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0, 0.1)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent second
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0, -0.1)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent third
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0, -0.3)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent First
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = First
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    TextComponent Second
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Second
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    TextComponent Third
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Third
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    MouseComponent Order_Position_Response
      clickable = first,second,third
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    MarkEvents MarkEventsR1_Decision plugin="psychopy-eyelink"
      componentsForEyeLinkRespEventMessages = Order_Position_Response.clicked_name
      componentsForEyeLinkStimEventMessages = first, second, third, First, Second, Third
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = encode_position
      useQuitKeys = True
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  Routine Question1Text
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    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Is this object old or new?
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  Routine methodQText
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    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Was this set same or different as the previous set?
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    MarkEvents MarkEventsMethod1 plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = text_2
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 50
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useQuitKeys = False
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  Routine Q2Text
    RoutineSettingsComponent Q2Text
      stopVal [duration (s)] = 1
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    TextComponent question_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = When did you see the following object?
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    MarkEvents MarkEventsQ2 plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = question_text
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useQuitKeys = True
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  Routine initRecallPics
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    CodeComponent recall_c
      Code Type = Py
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      Begin Routine:
        # Set trial numbers and initialize lists
        retTrials = 0
        samePics = []  #list to hold all encoding images
        sampled_images = []  #list to hold all encoding images with their positions
        retrieval_list = []  #list to hold selected retrieval images

        #Set retrieval image selection logic
        sampled_trials = set()  #Track encoding trials we already sampled retrieval images from

        #Balance the number of images based on encoding position and order:
        #initialize
        order_position_counts = {
            ("first", "left"): 0, ("first", "middle"): 0, ("first", "right"): 0,
            ("second", "left"): 0, ("second", "middle"): 0, ("second", "right"): 0,
            ("third", "left"): 0, ("third", "middle"): 0, ("third", "right"): 0,
        }
        #set how many we want from each
        img_per_order_position = {
            ("first", "left"): 3, ("first", "middle"): 2, ("first", "right"): 3,
            ("second", "left"): 2, ("second", "middle"): 1, ("second", "right"): 2,
            ("third", "left"): 3, ("third", "middle"): 2, ("third", "right"): 3,
        }
        #to make these add up to 20, I randomly make either second left or second right 1 instead of 2
        position_to_sample_less = random.choice([("second", "left"), ("second", "right")])
        img_per_order_position[position_to_sample_less] = 1

        #store all images here (instead of appending to ret images at every iteration of eTrials)
        order_position_images = defaultdict(list)

        #Loop through encoding trials and sort images to their order/positions
        for eTrials in range(numEncodingBlock1):
            method_Trial = sameDiff[eTrials]
            if method_Trial == "same":
                    trialType = sameTrials[eTrials]  # get same/diff
                    position_order = position_map[trialType]  # get trial type for order
                    firstPos, secondPos, thirdPos = position_map[trialType] #get whether position is first, second, third
                    pos_to_name = {leftPos: "left", midPos: "middle", rightPos: "right"} #so we can access strings not coordinates of locations
                #    print(f"Trial {eTrials} type: {method_Trial}")
                #    print(f"Trial {eTrials} type: {trialType}")

                    #Get images based on the position
                    positions = {
                        "left": encodingPics1[eTrials][position_order.index(leftPos)],
                        "middle": encodingPics1[eTrials][position_order.index(midPos)],
                        "right": encodingPics1[eTrials][position_order.index(rightPos)]
                        }
              #      print(f"Positions for trial {eTrials}: {positions}")

                    #Get images based on the order
                    orders = {
                        "first": encodingPics1[eTrials][position_order.index(firstPos)],
                        "second": encodingPics1[eTrials][position_order.index(secondPos)],
                        "third": encodingPics1[eTrials][position_order.index(thirdPos)]
                    }
            #        print(f"Orders for trial {eTrials}: {orders}")

                    #save each image in their order/position pair
                    for order, pos in [("first", firstPos), ("second", secondPos), ("third", thirdPos)]:
                        loc_name = pos_to_name[pos]
                        image = encodingPics1[eTrials][position_order.index(pos)]
                        if image is not None:
                        # Store the image with its trial so we know which trials we are grabbing from
                            order_position_images[(order, loc_name)].append((image, eTrials))

        #Take the images into the retrieval list according to how many from each order/position we want
        for (order, pos), desired_count in img_per_order_position.items():
            available_images = order_position_images[(order, pos)] #so currently all images are available

            # Randomly sample images from all available images, making sure not to exceed the desired count
            sampled_images = random.sample(available_images, min(len(available_images), desired_count)) #if the count we set has not been reached for that order/pos, get an img

            #Add the selected image to the retrieval list along with other info we want to keep track of
            for img, trial_id in sampled_images:
                retrieval_list.append({
                    "image": img,
                    "encoding_order": order,
                    "encoding_location": pos,
                    "from_trial": trial_id
                })
                order_position_counts[(order, pos)] += 1 #iterate the count for the specific order/pos
                sampled_trials.add(trial_id)  #mark trial as sampled so we don't take another image from it

        #If we run out of images, pick another image so it doesn't cause a crash
        #initialize
        additional_images = []
        remaining_images = []

        #Check if there is less than 20 images in the retrieval list so it doesn't crash
        if len(retrieval_list) < 20:
            missing_count = 20 - len(retrieval_list)  # How many do we need to get to 20

            #Get all unsampled encoding images with their order and position
            for (order, pos), images in order_position_images.items():
                remaining_images.extend([(img, trial_id) for img, trial_id in images if img not in sampled_trials])

            #randomly sample from that
            additional_images = random.sample(remaining_images, min(len(remaining_images), missing_count))

            #if it's still less than 20 continue sampling (shouldn't happen but so it doesn't crash)
            while len(retrieval_list) < 20 and len(additional_images) < missing_count:
                remaining_unsampled = [img for img in remaining_images if img not in additional_images]
                additional_images.extend(random.sample(remaining_unsampled, min(len(remaining_unsampled), missing_count - len(additional_images))))

            # Add the selected images to the retrieval list with all the info
            for img, trial_id in additional_images:
                retrieval_list.append({
                    "image": img,
                    "encoding_order": order,
                    "encoding_location": pos,
                    "from_trial": trial_id  # Make sure this key is set correctly
                })
                order_position_counts[(order, pos)] += 1 #mark which order/pos it was
                sampled_trials.add(trial_id)  #mark as sampled

        #check it was 20
        print(f"Final retrieval list length: {len(retrieval_list)}")

        #Finally, shuffle retrieval list
        random.shuffle(retrieval_list)
        print("Final shuffled retrieval list:")
        print(retrieval_list)

        #Get all the info for each image
        for item in retrieval_list:
            image_name = item["image"]
            encoding_order = item["encoding_order"]
            encoding_location = item["encoding_location"]
            origin_trial = item["from_trial"]

            #Get just image names to samePics
            samePics.append(image_name)

        #Check counts
        print("Final order-position counts:", order_position_counts)
  Routine code_JS
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    CodeComponent code_js
      Code Type = Both
      Begin JS Experiment:
        win=psychoJS.window;
        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;

        shuffle = function (a) {
            return util.shuffle(a);
        }
        random = function (a) {
            return Math.random();
        }
        //defining functions for js
        retTrials=0;
        decTrials=0;
        nextTrial=[];
        var TestQuestion;
        var MouseResp;
        trialType = [];
        var methodAns;
        var methodCheck;
        var response;
        var corrAns;
        var decResponse;
        var encodingType;
        var retSame;
        var retNew;
        count=0;
        trialTypes = [];
        TestQuestion = [];
        methodAns = [];
        methodCheck = 0;
        MouseResp = 0;
        retrievalImage = [];
        response = [];
        decResponse = [];
        encodingType = [];
        retrievalOld = [];
        retrievalNew = [];
        samePics = [];
        diffPics = [];
        leftPos = [];
        midPos = [];
        rightPos = [];
        triplet1 = [];
        triplet2 = [];
        triplet3= [];
        retType = [];
        img1 =[];
        img2 =[];
        img3 =[];
        retProb = Math.random();
        response = [];
        Ans1 = [];
        Ans2 = [];
        Ans3 = [];
        eTrials = 0;
        list = [];
        sameDiff = [];
        method_Trial = [];
        sound_pop1 = [];
        sound_pop2 = [];
        sound_pop3 = [];
        sound_pop4 = [];
        sound_pop5 = [];
        sound_pop6 = [];
        sound_pop7 = [];
        click_sound = [];
        //have to define these variables for js
  Routine block2initial
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    CodeComponent randomizeblock2
      Code Type = Both
      Begin JS Routine:
        allPics = ['OBJ_106','OBJ_107','OBJ_109','OBJ_110','OBJ_111','OBJ_112','OBJ_113','OBJ_114','OBJ_115','OBJ_116','OBJ_119','OBJ_120','OBJ_121','OBJ_123','OBJ_125','OBJ_126','OBJ_128','OBJ_129','OBJ_130','OBJ_131','OBJ_133','OBJ_134','OBJ_135','OBJ_136','OBJ_137','OBJ_138','OBJ_139','OBJ_140','OBJ_141','OBJ_142','OBJ_143','OBJ_144','OBJ_145','OBJ_146','OBJ_147','OBJ_148','OBJ_149','OBJ_150','OBJ_151','OBJ_152','OBJ_153','OBJ_154','OBJ_155','OBJ_156','OBJ_157','OBJ_158','OBJ_160','OBJ_161','OBJ_163','OBJ_164','OBJ_165','OBJ_166','OBJ_167','OBJ_168','OBJ_170','OBJ_171','OBJ_172','OBJ_173','OBJ_174','OBJ_175','OBJ_177','OBJ_178','OBJ_179','OBJ_181','OBJ_182','OBJ_183','OBJ_184','OBJ_186','OBJ_187','OBJ_188','OBJ_189','OBJ_190','OBJ_191','OBJ_193','OBJ_194','OBJ_195','OBJ_196','OBJ_197','OBJ_198','OBJ_199','OBJ_200','OBJ_202','OBJ_203','OBJ_204','OBJ_205','OBJ_206','OBJ_208','OBJ_209','OBJ_210'];
        trialTypes= ["LMR","LMR","LMR","LMR","LMR","LMR","LMR","LMR","RML","RML","RML","RML","RML","RML","RML","RML" ,"MLR","MLR","MRL","MRL","LRM","LRM", "RLM", "RLM","RLM"];
        shuffle(allPics);
        shuffle(trialTypes);

        numItems = 105;
        numEncoding = 25;
        numRetrieval = 40;

        const triplets = [];
        for (let i = 0; i< 75; i+=3) {
            triplets.push(allPics.slice(i,i+3));
            }

        encodingPics = triplets;
        newPics = allPics.slice(75, allPics.length-1);

        samePics = [];
        diffPics = [];
        eTrials = 0;
  Routine second2
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  Routine first2
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    CodeComponent encode2
      Code Type = Both
      Begin JS Routine:
        trialType = trialTypes[eTrials];
        leftPos = [(- 0.5), 0.0];
        midPos = [0.0, 0.0];
        rightPos = [0.5, 0.0];

        if ((trialType === "LMR")) {
            firstPos = leftPos;
            secondPos = midPos;
            thirdPos = rightPos;
        } else if ((trialType === "LRM")) {
            firstPos = leftPos;
            secondPos = rightPos;
            thirdPos = midPos;
        } else if ((trialType === "MLR")) {
            firstPos = midPos;
            secondPos = leftPos;
            thirdPos = rightPos;
        } else if ((trialType === "RML")) {
            firstPos = rightPos;
            secondPos = midPos;
            thirdPos = leftPos;
        } else if ((trialType === "RLM")) {
             firstPos = rightPos;
             secondPos = leftPos;
             thirdPos = midPos;
        } else if ((trialType === "MRL")) {
             firstPos = midPos;
             secondPos = rightPos;
             thirdPos = leftPos;
        }
        triplet1 = (("images/" + encodingPics[eTrials][0]) + ".png");
        triplet2 = (("images/" + encodingPics[eTrials][1]) + ".png");
        triplet3 = (("images/" + encodingPics[eTrials][2]) + ".png");

        thisExp.addData("Trial_Order", trialType);
        thisExp.addData("triplet1", triplet1);
        thisExp.addData("triplet2", triplet2);
        thisExp.addData("triplet3", triplet3);
      End JS Routine:
        console.log('t1',triplet1)
    ImageComponent t1
      image [set every repeat] = $triplet1
      pos [set every repeat] = $firstPos
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent t2
      image [set every repeat] = $triplet2
      pos [set every repeat] = $secondPos
      size = (0.3, 0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    ImageComponent t3
      image [set every repeat] = $triplet3
      pos [set every repeat] = $thirdPos
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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  Routine initret2
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    CodeComponent ret2code
      Code Type = Both
      Begin JS Routine:
        retProb = Math.random();
        retSame = 0;
        retNew = 0;

        shuffle(newPics);
        shuffle(samePics);

        retrievalNew = [];
        retrievalSame = [];

        retrievalNew.push(newPics);
        retrievalSame.push(samePics);
  Routine clicked_sound
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    SoundComponent clickedSound
      sound [set every repeat] = click.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine trial_nos
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        numEncoding =
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine fixation
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    ImageComponent fix
      flipHoriz = True
      image = images/fixation.png
      size = (0.07, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    MarkEvents MarkEventsFix plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = fix
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = False
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useQuitKeys = True
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  Routine Block2Instructions
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  Routine init2
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    CodeComponent init2code
      Code Type = Py
      Begin Routine:
        sameDiff2 = ["same"] * 20 + ["diff"] * 5
        random.shuffle(sameDiff2)
        print("Randomized same-different list 2:")
        print(sameDiff2)

        #for trial order
        # Define the strings
        fixed_strings = ['LMR', 'RML']  # These will occur 9 times each
        other_strings = ['MLR', 'MRL', 'LRM', 'RLM']  # These will be randomly selected to have total of 9 also

        # Combine all strings for sameTrials
        sameTrials2 = fixed_strings * 9  # Repeating fixed_strings 9 times
        sameTrials2 = (fixed_strings * 9) + selected_strings
        random.shuffle(sameTrials2)

        # Print the randomized list
        print("Randomized string list (sameTrials2):")
        print(sameTrials2)

        # For the different trials:
        diffTrials2 = fixed_strings * 9  # Repeating fixed_strings 9 times
        diffTrials2 = (fixed_strings * 9) + selected_strings
        random.shuffle(diffTrials2)

        # Shuffle the list
        random.shuffle(diffTrials2)

        # Print the randomized list for diffTrials
        print("\nRandomized string list (diffTrials2):")
        print(diffTrials2)

        #hard-coded names of all images and trial types (counterbalanced).
        numItems = len(allPics)
        #numTotencoding = 50
        numEncodingBlock1 = 25
        numEncodingBlock2 = 25
        numTotretrieval = 4
        numRetrieval1 = 20
        numRetrieval2 = 20
        eTrials2 = 0

        #define again
        samePics2 = []

        # Initialize positional storage for retrieval balance
        left_encoded_pics2 = []
        middle_encoded_pics2 = []
        right_encoded_pics2 = []
  Routine second_view
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    CodeComponent secondw_code
      Code Type = Py
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      Begin Routine:
        method_Trial = sameDiff[eTrials]

        #trial type and position order based on same/diff
        if method_Trial == "same":
            trialType = sameTrials[eTrials]
            position_order = position_map[trialType]
            methodAns = ['leftCL']

            #assign triplets
            triplet1 = triplet1_1
            triplet2 = triplet2_1
            triplet3 = triplet3_1

            #assign positions
            firstPos, secondPos, thirdPos = position_map[trialType]

            #encoding type
            EncodingTrials.addData("encodingType", "same")
            encodingType = 'same'
        else:
            #select a new trial that isn't the same as the previous one
            nextTrial = random.choice(diffTrials)
            while nextTrial == trialType:
                nextTrial = random.choice(diffTrials)
                #set trial
            trialType = nextTrial

            #assign positions
            firstPos, secondPos, thirdPos = position_map[trialType]
            methodAns = ['rightCL']

            #shuffle list of indices for the triplet
            list_indices = [0, 1, 2]
            random.shuffle(list_indices)

            #assign triplets using the shuffled indices
            triplet1 = 'images/' + encodingPics1[eTrials][list_indices[0]] + '.png'
            triplet2 = 'images/' + encodingPics1[eTrials][list_indices[1]] + '.png'
            triplet3 = 'images/' + encodingPics1[eTrials][list_indices[2]] + '.png'

            #encoding type
            EncodingTrials.addData("encodingType", "diff")
            encodingType = 'diff'

        # Add data for the second view
        thisExp.addData("triplet1_second_view", triplet1)
        thisExp.addData("triplet2_second_view", triplet2)
        thisExp.addData("triplet3_second_view", triplet3)
        thisExp.addData("trialOrder", trialType)
      End Routine:
        #iterate trials
        eTrials = eTrials + 1
        TRIAL_INDEX = TRIAL_INDEX + 1

        #add data for psychopy
        EncodingTrials.addData("encodingTrials", str(eTrials))
        EncodingTrials.addData("TRIAL_INDEX", str(TRIAL_INDEX))

        #add data for EDF file
        el_tracker.sendMessage('!V TRIAL_VAR TRIAL_INDEX %d' % TRIAL_INDEX)
        el_tracker.sendMessage('!V TRIAL_VAR eTrials %d' %eTrials)
        el_tracker.sendMessage('!V TRIAL_VAR trialType %s' %trialType)
        el_tracker.sendMessage('!V TRIAL_VAR method_Trial %s' %method_Trial)
        el_tracker.sendMessage('!V TRIAL_VAR nextTrial %s' %nextTrial)
    ImageComponent img1
      image [set every repeat] = $triplet1
      pos [set every repeat] = $firstPos
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent img2
      image [set every repeat] = $triplet2
      pos [set every repeat] = $secondPos
      size = (0.25, 0.25)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    ImageComponent img3
      image [set every repeat] = $triplet3
      pos [set every repeat] = $thirdPos
      size = (0.25, 0.25)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop4
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop5
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop6
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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    MarkEvents MarkEventsE1second_view plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = img1, img2, img3
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = firstPos, secondPos, thirdPos, triplet1_1, triplet2_1, triplet3_1,  encodingType
      useQuitKeys = True
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  Routine second_view2
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    CodeComponent secondw_code_2
      Code Type = Py
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      Begin Routine:
        method_Trial = sameDiff2[eTrials2]

        #trial type and position order based on same/diff
        if method_Trial == "same":
            trialType = sameTrials2[eTrials2]
            position_order = position_map[trialType]
            methodAns = ['leftCL_2']

            #assign triplets
            triplet1 = triplet1_2
            triplet2 = triplet2_2
            triplet3 = triplet3_2
            firstPos, secondPos, thirdPos = position_map[trialType]

            EncodingBlock2.addData("encodingType", "same")
            encodingType = 'same'

        else:
            #select a new trial that isn't the same as the previous one
            nextTrial = random.choice(diffTrials2)
            while nextTrial == trialType:
                nextTrial = random.choice(diffTrials2)
            #set trial
            trialType = nextTrial
            firstPos, secondPos, thirdPos = position_map[trialType]
            methodAns = ['rightCL_2']

            # Shuffle the list of indices for the triplet
            list_indices = [0, 1, 2]
            random.shuffle(list_indices)

            # Assign triplets using the shuffled indices from encodingPics1
            triplet1 = 'images/' + encodingPics2[eTrials2][list_indices[0]] + '.png'
            triplet2 = 'images/' + encodingPics2[eTrials2][list_indices[1]] + '.png'
            triplet3 = 'images/' + encodingPics2[eTrials2][list_indices[2]] + '.png'

            # Log the encoding type for Block 2
            EncodingBlock2.addData("encodingType", "diff")
            encodingType = 'diff'

        # Add data for the second view
        thisExp.addData("triplet1_second_view", triplet1)
        thisExp.addData("triplet2_second_view", triplet2)
        thisExp.addData("triplet3_second_view", triplet3)
        thisExp.addData("trialOrder", trialType)
      End Routine:
        eTrials2 = eTrials2 + 1
        TRIAL_INDEX = TRIAL_INDEX + 1

        #for psychopy
        EncodingBlock2.addData("encodingTrials", str(eTrials2))
        EncodingBlock2.addData("TRIAL_INDEX", str(TRIAL_INDEX))

        #for EDF file
        el_tracker.sendMessage('!V TRIAL_VAR TRIAL_INDEX %d' % TRIAL_INDEX)
        el_tracker.sendMessage('!V TRIAL_VAR eTrials %d' %eTrials2)
        el_tracker.sendMessage('!V TRIAL_VAR trialType %s' %trialType)
        el_tracker.sendMessage('!V TRIAL_VAR method_Trial %s' %method_Trial)
        el_tracker.sendMessage('!V TRIAL_VAR nextTrial %s' %nextTrial)
    ImageComponent img1_2
      image [set every repeat] = $triplet1
      pos [set every repeat] = $firstPos
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent img2_2
      image [set every repeat] = $triplet2
      pos [set every repeat] = $secondPos
      size = (0.25, 0.25)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    ImageComponent img3_2
      image [set every repeat] = $triplet3
      pos [set every repeat] = $thirdPos
      size = (0.25, 0.25)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop4_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop5_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop6_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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    MarkEvents MarkEventsE2second_view plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = img1_2, img2_2, img3_2
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = triplet1_2, triplet2_2, triplet3_2, firstPos2, secondPos2, thirdPos2, encodingType
      useQuitKeys = True
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  Routine first_view2
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    CodeComponent firstw_code_2
      Code Type = Py
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      Begin Routine:
        # Define position variables
        leftPos = (-0.5, 0.0)
        midPos = (0.0, 0.0)
        rightPos = (0.5, 0.0)

        # Define position map
        position_map = {
            'LMR': (leftPos, midPos, rightPos),
            'LRM': (leftPos, rightPos, midPos),
            'MLR': (midPos, leftPos, rightPos),
            'RML': (rightPos, midPos, leftPos),
            'RLM': (rightPos, leftPos, midPos),
            'MRL': (midPos, rightPos, leftPos),
        }
        #position names
        position_names = {
            "left": leftPos,
            "middle": midPos,
            "right": rightPos
        }
        # Iterate through trial type and set a new one for each trial
        method_Trial = sameDiff2[eTrials2]
        if method_Trial == "same":
            trialType = sameTrials2[eTrials2]
        else:
            trialType = diffTrials2[eTrials2]

        # Get positions from the position map
        firstPos, secondPos, thirdPos = position_map[trialType]

        # Set images in triplets for the first view
        triplet1 = 'images/' + encodingPics2[eTrials2][0] + '.png'
        triplet2 = 'images/' + encodingPics2[eTrials2][1] + '.png'
        triplet3 = 'images/' + encodingPics2[eTrials2][2] + '.png'

        # Save initial positions and triplets
        firstPos2 = firstPos
        secondPos2 = secondPos
        thirdPos2 = thirdPos
        triplet1_2 = triplet1
        triplet2_2 = triplet2
        triplet3_2 = triplet3

        #save variables
        EncodingBlock2.addData("trialOrder", trialType)
        thisExp.addData("triplet1", triplet1)
        thisExp.addData("triplet2", triplet2)
        thisExp.addData("triplet3", triplet3)
        trial_category = "encoding"
    ImageComponent Triplet1_2
      image [set every repeat] = $triplet1
      pos [set every repeat] = $firstPos
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent Triplet2_2
      image [set every repeat] = $triplet2
      pos [set every repeat] = $secondPos
      size = (0.25, 0.25)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    ImageComponent Triplet3_2
      image [set every repeat] = $triplet3
      pos [set every repeat] = $thirdPos
      size = (0.25, 0.25)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop2_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_pop3_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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    MarkEvents MarkEventsE2first_view plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = Triplet1_2, Triplet2_2, Triplet3_2
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = triplet1_2, triplet2_2, triplet3_2, firstPos2, secondPos2, thirdPos2, trial_category
      useQuitKeys = True
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  Routine mask_2
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    ImageComponent Mask_2
      image = images/Mask.png
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine clicked_sound2
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    SoundComponent clickedSound_2
      sound [set every repeat] = click.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine MethodCheck2
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    CodeComponent methodc_code_2
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        #store whether or not they answered correctly for the "same" or "different" trial type.
        if MethodMouse_2.clicked_name == methodAns:
            EncodingBlock2.addData ("methodCheck", '1')
            methodCheck = 1
        else:
            EncodingBlock2.addData ("methodCheck", '0')
            methodCheck = 0

        #psychopy output
        EncodingBlock2.addData("TRIAL_INDEX", str(TRIAL_INDEX))
        EncodingBlock2.addData("trialCategory", str(trial_category))
        EncodingBlock2.addData("encodingTrials", str(eTrials2))
        EncodingBlock2.addData("methodCheck", str(methodCheck))

        #for the EDF output
        el_tracker.sendMessage('!V TRIAL_VAR methodCheck %s' % methodCheck)
        el_tracker.sendMessage('!V TRIAL_VAR methodResp %s' % MethodMouse_2.clicked_name)

        win.mouseVisible = False
    TextComponent text_5
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Was this set same or different as the previous set?
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    TextComponent sameText_2
      letterHeight = 0.03
      pos = (-0.2, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Same
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    TextComponent diffText_2
      letterHeight = 0.03
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Different
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    PolygonComponent leftCL_2
      fillColor = $(1.0000, 1.0000, 1.0000)
      lineWidth = 3
      opacity = 0.5
      pos = (-.2, -.3)
      shape = rectangle
      size = (-0.2, -0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent rightCL_2
      fillColor = $(1.0000, 1.0000, 1.0000)
      lineWidth = 3
      opacity = 0.5
      pos = (0.2, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent MethodMouse_2
      clickable = rightCL_2, leftCL_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    MarkEvents MarkEventsE2_MethodCheck2 plugin="psychopy-eyelink"
      componentsForEyeLinkRespEventMessages = MethodMouse_2.clicked_name
      componentsForEyeLinkStimEventMessages = text_5, sameText_2, diffText_2, leftCL_2, rightCL_2
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = methodCheck
      useQuitKeys = True
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  Routine RetrievalImage2
    RoutineSettingsComponent RetrievalImage2
      stopVal [duration (s)] = 1.5
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    CodeComponent ret_img_c_2
      Code Type = Py
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      Begin Routine:
        retrievalImage = None
        # Ensure `samePics` has remaining images
        if len(samePics2) == 0:
            sys.exit("Error: samePics is empty")
        # Select and store the current retrieval image from samePics
        retrievalImage = 'images/' + samePics2[retTrials2] + '.png'
        encoding_position = str(retrieval_list2[retTrials2]["encoding_position"])

        # Add data
        trial_category = "retrieval"
        RetrievalBlock2.addData("retIMG", retrievalImage)
        thisExp.addData("retIMG", retrievalImage)
        thisExp.addData("encoding_position", encoding_position)
    ImageComponent retIMG_2
      image [set every repeat] = $retrievalImage
      size = (0.25,0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_pop7_2
      sound [set every repeat] = POP.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    MarkEvents MarkEventsR2_RetIMG plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = retIMG_2
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = retrievalImage, retTrials2, trial_category
      useQuitKeys = True
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  Routine initRecallPics2
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    CodeComponent recall_c_2
      Code Type = Py
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      Begin Routine:
        # Set trial numbers and initialize lists
        retTrials2 = 0
        samePics2 = []  #list to hold all encoding images
        sampled_images = []  #list to hold all encoding images with their positions
        retrieval_list = []  #list to hold selected retrieval images

        #Set retrieval image selection logic
        #sampled_trials2 = set()  #Track encoding trials we already sampled retrieval images from
        sampled_trials = set()  #Track encoding trials we already sampled retrieval images from

        #Balance the number of images based on encoding position and order:
        #re-initialize
        order_position_counts = {
            ("first", "left"): 0, ("first", "middle"): 0, ("first", "right"): 0,
            ("second", "left"): 0, ("second", "middle"): 0, ("second", "right"): 0,
            ("third", "left"): 0, ("third", "middle"): 0, ("third", "right"): 0,
        }
        #re-set how many we want from each
        img_per_order_position = {
            ("first", "left"): 3, ("first", "middle"): 2, ("first", "right"): 3,
            ("second", "left"): 2, ("second", "middle"): 1, ("second", "right"): 2,
            ("third", "left"): 3, ("third", "middle"): 2, ("third", "right"): 3,
        }
        #to make these add up to 20, I randomly make either second left or second right 1 instead of 2
        position_to_sample_less = random.choice([("second", "left"), ("second", "right")])
        img_per_order_position[position_to_sample_less] = 1

        #store all images here (instead of appending to ret images at every iteration of eTrials)
        order_position_images = defaultdict(list)

        #Loop through encoding trials and sort images to their order/positions
        for eTrials2 in range(numEncodingBlock2):
            method_Trial = sameDiff2[eTrials2]
            if method_Trial == "same":
                    trialType = sameTrials2[eTrials2]  # get same/diff
                    position_order = position_map[trialType]  # get trial type for order
                    firstPos, secondPos, thirdPos = position_map[trialType] #get whether position is first, second, third
                    pos_to_name = {leftPos: "left", midPos: "middle", rightPos: "right"} #so we can access strings not coordinates of locations
                #    print(f"Trial {eTrials} type: {method_Trial}")
                #    print(f"Trial {eTrials} type: {trialType}")

                    #Get images based on the position
                    positions = {
                        "left": encodingPics2[eTrials2][position_order.index(leftPos)],
                        "middle": encodingPics2[eTrials2][position_order.index(midPos)],
                        "right": encodingPics2[eTrials2][position_order.index(rightPos)]
                        }
                    print(f"Positions for trial {eTrials}: {positions}")

                    #Get images based on the order
                    orders = {
                        "first": encodingPics2[eTrials2][position_order.index(firstPos)],
                        "second": encodingPics2[eTrials2][position_order.index(secondPos)],
                        "third": encodingPics2[eTrials2][position_order.index(thirdPos)]
                    }
                    print(f"Orders for trial {eTrials}: {orders}")

                    #save each image in their order/position pair
                    for order, pos in [("first", firstPos), ("second", secondPos), ("third", thirdPos)]:
                        loc_name = pos_to_name[pos]
                        image = encodingPics2[eTrials2][position_order.index(pos)]
                        if image is not None:
                        # Store the image with its trial so we know which trials we are grabbing from
                            order_position_images[(order, loc_name)].append((image, eTrials))

        #Take the images into the retrieval list according to how many from each order/position we want
        for (order, pos), desired_count in img_per_order_position.items():
            available_images = order_position_images[(order, pos)] #so currently all images are available

            # Randomly sample images from all available images, making sure not to exceed the desired count
            sampled_images = random.sample(available_images, min(len(available_images), desired_count)) #if the count we set has not been reached for that order/pos, get an img

            #Add the selected image to the retrieval list along with other info we want to keep track of
            for img, trial_id in sampled_images:
                retrieval_list.append({
                    "image": img,
                    "encoding_order": order,
                    "encoding_location": pos,
                    "from_trial": trial_id
                })
                order_position_counts[(order, pos)] += 1 #iterate the count for the specific order/pos
                sampled_trials.add(trial_id)  #mark trial as sampled so we don't take another image from it

        #If we run out of images, pick another image so it doesn't cause a crash
        #initialize
        additional_images = []
        remaining_images = []

        #Check if there is less than 20 images in the retrieval list so it doesn't crash
        if len(retrieval_list) < 20:
            missing_count = 20 - len(retrieval_list)  # How many do we need to get to 20

            #Get all unsampled encoding images with their order and position
            for (order, pos), images in order_position_images.items():
                remaining_images.extend([(img, trial_id) for img, trial_id in images if img not in sampled_trials])

            #randomly sample from that
            additional_images = random.sample(remaining_images, min(len(remaining_images), missing_count))

            #if it's still less than 20 continue sampling (shouldn't happen but so it doesn't crash)
            while len(retrieval_list) < 20 and len(additional_images) < missing_count:
                remaining_unsampled = [img for img in remaining_images if img not in additional_images]
                additional_images.extend(random.sample(remaining_unsampled, min(len(remaining_unsampled), missing_count - len(additional_images))))

            # Add the selected images to the retrieval list with all the info
            for img, trial_id in additional_images:
                retrieval_list.append({
                    "image": img,
                    "encoding_order": order,
                    "encoding_location": pos,
                    "from_trial": trial_id  # Make sure this key is set correctly
                })
                order_position_counts[(order, pos)] += 1 #mark which order/pos it was
                sampled_trials.add(trial_id)  #mark as sampled

        #check it was 20
        print(f"Final retrieval list length: {len(retrieval_list)}")

        #Finally, shuffle retrieval list
        random.shuffle(retrieval_list)
        print("Final shuffled retrieval list:")
        print(retrieval_list)

        #Get all the info for each image
        for item in retrieval_list:
            image_name = item["image"]
            encoding_order = item["encoding_order"]
            encoding_location = item["encoding_location"]
            origin_trial = item["from_trial"]

            #Get just image names to samePics
            samePics2.append(image_name)

        #Check counts
        print("Final order-position counts:", order_position_counts)
  Routine Decision2
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    CodeComponent dec_code_2
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
        el_tracker.sendMessage('decision 2 started')

        #reset mouse so we can get time of each decision
        Order_Position_Response_2.clickReset()
        mouse_clicked = False
      Each Frame:
        if 1 in Order_Position_Response_2.getPressed() and not mouse_clicked:
            decisionMade = str(el_tracker.getCurrentTime())
          #  decisionMade = str(globalClock.getTime(format='float'))
          #  globalClock = core.Clock(format='float')
          #str(int(round(globalClock.getTime(format='float'))))
            mouse_clicked = True
      End Routine:
        win.mouseVisible = False

        retTrials2 = retTrials2 + 1
        TRIAL_INDEX = TRIAL_INDEX + 1

        #for EDF output
        el_tracker.sendMessage('!V TRIAL_VAR retTrials %d' % retTrials2)
        el_tracker.sendMessage('!V TRIAL_VAR orderPosition %s' % Order_Position_Response_2.clicked_name)
        el_tracker.sendMessage('!V TRIAL_VAR decisionMade %s' % decisionMade)
        el_tracker.sendMessage('!V TRIAL_VAR encoding_order %s' % encoding_order)
        el_tracker.sendMessage('!V TRIAL_VAR encoding_location %s' % encoding_location)
        el_tracker.sendMessage('!V TRIAL_VAR origin_trial %s' % origin_trial)
        #psychopy output
        RetrievalBlock2.addData("retTrials", str(retTrials2))
        RetrievalBlock2.addData("TRIAL_INDEX", str(TRIAL_INDEX))
        RetrievalBlock2.addData("retIMG", str(retrievalImage))
        RetrievalBlock2.addData('trialCategory', str(trial_category))

        #sanity check
        #print("ret list 2:")
        #print(retrieval_list2)
        #print("samePics2:")
        #print(samePics2)
        #print("sampled trials 2:")
        #print(sampled_trials2)
    TextComponent decisionQ_3
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = When did you see this object?
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    PolygonComponent first_2
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0, 0.1)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent second_2
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0, -0.1)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent third_2
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0, -0.3)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent First_2
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = First
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    TextComponent Second_2
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = Second
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    TextComponent Third_2
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Third
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    MouseComponent Order_Position_Response_2
      clickable = first_2,second_2,third_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    MarkEvents MarkEventsR2_Decision plugin="psychopy-eyelink"
      componentsForEyeLinkRespEventMessages = Order_Position_Response_2.clicked_name
      componentsForEyeLinkStimEventMessages = First_2, Second_2, Third_2, first_2, second_2, third_2
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = encode_position
      useQuitKeys = True
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  Routine break_1
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    TextComponent BlockBreak
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        You are done with the first portion of the task!

        Now, you have a three minute break. When the time is over, you will see instructions on the screen.
    TextComponent text_4
      letterHeight = 0.03
      startVal [time (s)] = 180
      text = You will be asked to remember when in the triplet you saw objects. Press the spacebar to begin.
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    KeyboardComponent start2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 180
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    KeyboardComponent exp_endbreak
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp
      allowedKeys = z
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_
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    ImageComponent image
      image = images/OBJ_4.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = prese space to continue
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  Routine eyelinkSetup
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    KeyboardComponent el_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = False
      dummyMode = False
      hostAddress = 100.1.1.1
      screenUnitType = height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV9
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetSize = 24
      targetType = picture
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  Routine startRecordingRetrieval1
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    HostDrawing HostDrawingR1 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = retIMG
      recordStatusMessage = "Trial %s" %trial_index
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecordR1 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine startRecordingEncoding1
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    HostDrawing HostDrawing_Encode1 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = Triplet1, Triplet2, Triplet3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecordEncode plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine startRecording_Retrieval2
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    HostDrawing HostDrawingR2 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = retIMG_2
      recordStatusMessage = "Trial %s" %trial_index
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecordR2 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine startRecordingEncoding2
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    HostDrawing HostDrawingE2 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = Triplet1_2, Triplet2_2, Triplet3_2
      recordStatusMessage = "Trial %s" %trial_index
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    StartRecording StartRecordE2 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine exppic
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    ImageComponent image_2
      image = images/OBJ_4.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    MouseComponent mouse
      clickable = z
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine eyeCheck
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    DriftCheck DriftCheckR1 plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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  Routine stopRecordingDecision
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    UnknownPluginComponent MarkEvents_decision plugin="psychopy-eyelink"
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = orderResponse
      useQuitKeys = True
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    UnknownPluginComponent StopRecord_2 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eyeCheck2
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    DriftCheck DriftCheckR2 plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetFilename = images/fixTarget.bmp
      targetPosition = [0,0]
      targetSize = 24
      targetType = picture
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  Routine stopRecording
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    StopRecording StopRecordE1 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine fix2
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    ImageComponent fixation_img
      image = images/Fixation.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    UnknownPluginComponent markRetFix
      componentsForEyeLinkStimEventMessages = question_text
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = False
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useQuitKeys = True
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  EyetrackerCalibrationRoutine calibration_2
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  Routine eyelinkSetup
  Routine initCode
  Routine trial
  LoopInitiator EncodingTrials loopType="TrialHandler"
    loopType = random
    nReps = numEncodingBlock1
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    Routine startRecordingEncoding1
    Routine fixation
    Routine first_view
    Routine mask
    Routine second_view
    Routine methodQText
    Routine MethodCheck
    Routine stopRecording
  LoopTerminator EncodingTrials
  Routine break_1
  Routine initRecallPics
  Routine eyeCheck
  LoopInitiator RetrievalTrials loopType="TrialHandler"
    loopType = random
    nReps = numRetrieval1
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    Routine startRecordingRetrieval1
    Routine fixation
    Routine Q2Text
    Routine RetrievalImage
    Routine Decision
    Routine stopRecording
  LoopTerminator RetrievalTrials
  Routine init2
  Routine trial
  LoopInitiator EncodingBlock2 loopType="TrialHandler"
    loopType = random
    nReps = numEncodingBlock2
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    Routine startRecordingEncoding2
    Routine fixation
    Routine first_view2
    Routine mask
    Routine second_view2
    Routine methodQText
    Routine MethodCheck2
    Routine stopRecording
  LoopTerminator EncodingBlock2
  Routine break_1
  Routine initRecallPics2
  Routine eyeCheck2
  LoopInitiator RetrievalBlock2 loopType="TrialHandler"
    loopType = random
    nReps = numRetrieval2
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    Routine startRecording_Retrieval2
    Routine fixation
    Routine Q2Text
    Routine RetrievalImage2
    Routine Decision2
    Routine stopRecording
  LoopTerminator RetrievalBlock2
  Routine EndScreen
